PsychoPy2experiment version="2024.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = exp1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine time
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    SoundComponent te
      sound = questions/blanco.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      syncScreenRefresh = False
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  Routine answer
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    SoundComponent aw
      sound [set every repeat] = $answer
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $aw.getDuration()
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  Routine question
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    SoundComponent q
      sound [set every repeat] = $question
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $q.getDuration()
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  Routine conditions
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['serie'] == '1':
            t_time = 0.3
            a_answer = 'questions/si.wav'
        elif expInfo['serie'] == '2':
            t_time = 1
            a_answer = 'questions/si.wav'
        elif expInfo['serie'] == '3':
            t_time = 0.3
            a_answer = 'questions/no.wav'
        elif expInfo['serie'] == '4':
            t_time = 1
            a_answer = 'questions/no.wav'
  Routine slider
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = ¿Cuán seguro estas de tu respuesta?
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 1
      labels = "nada seguro", "muy seguro"
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine check_resp
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        num_trials = 20
        activation_rate = 0.2

        num_activate = int(num_trials * activation_rate)
        activation_list = [1] * num_activate + [0] * (num_trials - num_activate)

        random.shuffle(activation_list)

        trial_index = 0
  Routine check_question
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $check
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    SliderComponent slider_3
      forceEndRoutine = True
      granularity = 0
      labels = "sí", "no"
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2)
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  Routine instructions
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    TextComponent inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A continuación, escucharás una serie de audios. Por favor, presta atención a lo que escuchas y contesta las preguntas.

        Presiona en la barra espaciadora para continuar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine def_ac_check
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        activate_extra_routine = activation_list[trial_index]
  Routine re_def_ac_check
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        trial_index += 1
  Routine bye
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ¡Muchas gracias por su participación!
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Flow
  Routine check_resp
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = questions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'question': 'questions/p1.wav', 'time': 0.3, 'answer': 'questions/si.wav', 'check': '¿escuchaste 1 en p1?'},
      {'question': 'questions/p2.wav', 'time': 0.3, 'answer': 'questions/si.wav', 'check': '¿escuchaste 2 en p2?'},
      {'question': 'questions/p3.wav', 'time': 0.3, 'answer': 'questions/si.wav', 'check': '¿escuchaste 3 en p3?'},
      {'question': 'questions/p4.wav', 'time': 0.3, 'answer': 'questions/si.wav', 'check': '¿escuchaste 4 en p4?'},
      {'question': 'questions/p5.wav', 'time': 0.3, 'answer': 'questions/si.wav', 'check': '¿escuchaste 5 en p5?'},
      {'question': 'questions/p1.wav', 'time': 1, 'answer': 'questions/si.wav', 'check': '¿escuchaste 1 en p1?'},
      {'question': 'questions/p2.wav', 'time': 1, 'answer': 'questions/si.wav', 'check': '¿escuchaste 2 en p2?'},
      {'question': 'questions/p3.wav', 'time': 1, 'answer': 'questions/si.wav', 'check': '¿escuchaste 3 en p3?'},
      {'question': 'questions/p4.wav', 'time': 1, 'answer': 'questions/si.wav', 'check': '¿escuchaste 4 en p4?'},
      {'question': 'questions/p5.wav', 'time': 1, 'answer': 'questions/si.wav', 'check': '¿escuchaste 5 en p5?'},
      {'question': 'questions/p1.wav', 'time': 0.3, 'answer': 'questions/no.wav', 'check': '¿escuchaste 1 en p1?'},
      {'question': 'questions/p2.wav', 'time': 0.3, 'answer': 'questions/no.wav', 'check': '¿escuchaste 2 en p2?'},
      {'question': 'questions/p3.wav', 'time': 0.3, 'answer': 'questions/no.wav', 'check': '¿escuchaste 3 en p3?'}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
    Routine question
    Routine time
    Routine answer
    Routine slider
    Routine def_ac_check
    LoopInitiator check_trials loopType="TrialHandler"
      loopType = random
      nReps = activate_extra_routine
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      Routine check_question
    LoopTerminator check_trials
    Routine re_def_ac_check
  LoopTerminator trials
  Routine bye
